<CompuCell3D Revision="20160512" Version="3.7.5">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1000</Steps>
      <Temperature>-5.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>NoFlux</Boundary_x>
      <Boundary_x>Periodic</Boundary_x>
      <LatticeType>Hexagonal</LatticeType>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Protoderm"/>
      <CellType TypeId="2" TypeName="MMC"/>
      <CellType TypeId="3" TypeName="Meristemoid"/>
      <CellType TypeId="4" TypeName="SLGC"/>
      <CellType TypeId="5" TypeName="GMC"/>
      <CellType TypeId="6" TypeName="GC"/>
      <CellType TypeId="7" TypeName="Pavement"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Protoderm">10.0</Energy>
      <Energy Type1="Medium" Type2="MMC">10.0</Energy>
      <Energy Type1="Medium" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Medium" Type2="SLGC">10.0</Energy>
      <Energy Type1="Medium" Type2="GMC">10.0</Energy>
      <Energy Type1="Medium" Type2="GC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="Protoderm">10.0</Energy>
      <Energy Type1="Protoderm" Type2="MMC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Protoderm" Type2="SLGC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="GMC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="GC">10.0</Energy>
      <Energy Type1="MMC" Type2="MMC">10.0</Energy>
      <Energy Type1="MMC" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="MMC" Type2="SLGC">10.0</Energy>
      <Energy Type1="MMC" Type2="GMC">10.0</Energy>
      <Energy Type1="MMC" Type2="GC">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="SLGC">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="GMC">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="GC">10.0</Energy>
      <Energy Type1="SLGC" Type2="SLGC">10.0</Energy>
      <Energy Type1="SLGC" Type2="GMC">10.0</Energy>
      <Energy Type1="SLGC" Type2="GC">10.0</Energy>
      <Energy Type1="GMC" Type2="GMC">10.0</Energy>
      <Energy Type1="GMC" Type2="GC">10.0</Energy>
      <Energy Type1="GC" Type2="GC">10.0</Energy>
      <Energy Type1="Pavement" Type2="Pavement">0.0</Energy>
      <Energy Type1="Pavement" Type2="Protoderm">10.0</Energy>
      <Energy Type1="Pavement" Type2="MMC">10.0</Energy>
      <Energy Type1="Pavement" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Pavement" Type2="SLGC">10.0</Energy>
      <Energy Type1="Pavement" Type2="GMC">10.0</Energy>
      <Energy Type1="Pavement" Type2="GC">10.0</Energy>
      <Energy Type1="Pavement" Type2="Medium">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ContactInternal">
      <!-- Specification of internal adhesion energies -->
      <Energy Type1="Protoderm" Type2="Protoderm">10.0</Energy>
      <Energy Type1="Protoderm" Type2="MMC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Protoderm" Type2="SLGC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="GMC">10.0</Energy>
      <Energy Type1="Protoderm" Type2="GC">10.0</Energy>
      <Energy Type1="MMC" Type2="MMC">10.0</Energy>
      <Energy Type1="MMC" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="MMC" Type2="SLGC">10.0</Energy>
      <Energy Type1="MMC" Type2="GMC">10.0</Energy>
      <Energy Type1="MMC" Type2="GC">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="SLGC">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="GMC">10.0</Energy>
      <Energy Type1="Meristemoid" Type2="GC">10.0</Energy>
      <Energy Type1="SLGC" Type2="SLGC">10.0</Energy>
      <Energy Type1="SLGC" Type2="GMC">10.0</Energy>
      <Energy Type1="SLGC" Type2="GC">10.0</Energy>
      <Energy Type1="GMC" Type2="GMC">10.0</Energy>
      <Energy Type1="GMC" Type2="GC">10.0</Energy>
      <Energy Type1="GC" Type2="GC">10.0</Energy>
      <Energy Type1="Pavement" Type2="Pavement">-0.5</Energy>
      <Energy Type1="Pavement" Type2="Protoderm">10.0</Energy>
      <Energy Type1="Pavement" Type2="MMC">10.0</Energy>
      <Energy Type1="Pavement" Type2="Meristemoid">10.0</Energy>
      <Energy Type1="Pavement" Type2="SLGC">10.0</Energy>
      <Energy Type1="Pavement" Type2="GMC">10.0</Energy>
      <Energy Type1="Pavement" Type2="GC">10.0</Energy>
      <Energy Type1="Pavement" Type2="Medium">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="ConnectivityGlobal">
      
      <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
      <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
      <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
      <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
      <!-- To turn off precheck uncomment line below -->
      <!-- <DoNotPrecheckConnectivity/> -->
      <Penalty Type="Protoderm">1000000</Penalty>
      <Penalty Type="MMC">1000000</Penalty>
      <Penalty Type="Meristemoid">1000000</Penalty>
      <Penalty Type="SLGC">1000000</Penalty>
      <Penalty Type="GMC">1000000</Penalty>
      <Penalty Type="GC">1000000</Penalty>
      <Penalty Type="Pavement">1000000</Penalty>
   </Plugin>
   
   
   <!-- volumFlex diploid -->
   <Plugin Name="VolumeFlex">
   <VolumeEnergyParameters CellType="Protoderm" TargetVolume="35" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="MMC" TargetVolume="35" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="Meristemoid" TargetVolume="10" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="SLGC" TargetVolume="35" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="GMC" TargetVolume="10" LambdaVolume="5"/>
   <VolumeEnergyParameters CellType="GC" TargetVolume="5" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="Pavement" TargetVolume="50" LambdaVolume="2"/>
   
   <!-- volumFlex triploid -->
   <!--<Plugin Name="VolumeFlex">
   <VolumeEnergyParameters CellType="Protoderm" TargetVolume="47.5" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="MMC" TargetVolume="47.5" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="Meristemoid" TargetVolume="13.5" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="SLGC" TargetVolume="47.5" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="GMC" TargetVolume="13.5" LambdaVolume="5"/>
   <VolumeEnergyParameters CellType="GC" TargetVolume="6.77" LambdaVolume="2"/>
   <VolumeEnergyParameters CellType="Pavement" TargetVolume="47.5" LambdaVolume="2"/> -->
   
   
   
   <VolumeEnergyExpression>
        <Expression>LambdaVolume*(Volume-Vtarget)^4</Expression>
   </VolumeEnergyExpression>
   </Plugin> 
   
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="50" y="50" z="0"/>
         <Radius>20</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Protoderm,MMC</Types>
      </Region>
   </Steppable>
</CompuCell3D>
